CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:34
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>.*)_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)_.*_(?P<ilastik>[0-9]+)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>.*)_.+_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\\\\\\\(?P<fldr>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'cell': u'Well', u'phase': u'Well', u'cell_boundary': u'Well', u'background': u'Well', u'protrusion': u'Well'}, {u'cell': u'Site', u'phase': u'Site', u'cell_boundary': u'Site', u'background': u'Site', u'protrusion': u'Site'}, {u'cell': u'time', u'phase': u'time', u'cell_boundary': u'time', u'background': u'time', u'protrusion': u'time'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ilastik "3")
    Name to assign these images:cell
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ilastik "1")
    Name to assign these images:protrusion
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ilastik "0")
    Name to assign these images:background
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ilastik "2")
    Name to assign these images:cell_boundary
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does fldr "single_images")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Opening:[module_num:5|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notes:['Performs an erosion followed by a dilation. The effect is to break bridges between objects and remove single pixels.']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
    Select the input image:cell
    Name the output image:open_cell
    Structuring element:disk,3

ImageMath:[module_num:6|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notes:['Remove overlapping intensities from open_cell.']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:im_cell
    Image or measurement?:Image
    Select the first image:open_cell
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:cell_boundary
    Multiply the second image by:-1.0
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    Image or measurement?:Image
    Select the third image:background
    Multiply the third image by:-1.0
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    Image or measurement?:Image
    Select the fourth image:protrusion
    Multiply the fourth image by:-1.0
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
Threshold:[module_num:7|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notes:['']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
    Select the input image:im_cell
    Name the output image:cell_thresh
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.5
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
ImageMath:[module_num:8|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notes:["Didn't remove cell intensity to recreate IJ macro mask."]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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:im_protrusion
    Image or measurement?:Image
    Select the first image:protrusion
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:cell_boundary
    Multiply the second image by:-1.0
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    Image or measurement?:Image
    Select the third image:background
    Multiply the third image by:-1.0
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
Closing:[module_num:9|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notes:['Performs a dilation followed by an erosion. The effect is to fill holes and join nearby objects.']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
    Select the input image:im_protrusion
    Name the output image:close_protrusion
    Structuring element:disk,3

Threshold:[module_num:10|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
    Select the input image:close_protrusion
    Name the output image:protrusion_thresh
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:cell_thresh
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):13,500
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_cell_thresh
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:protrusion_thresh
    Name the primary objects to be identified:pplt
    Typical diameter of objects, in pixel units (Min,Max):15,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_protrusion_thresh
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
FilterObjects:[module_num:13|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enabled:False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
    Select the objects to filter:pplt
    Name the output objects:proplatelets
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Default Input Folder|Desktop
    Rules or classifier file name:fast_gentle_boosting_rules.txt
    Class number:1
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    Additional object count:0
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
MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:cells
    Select objects to measure:pplt
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:15|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
    Select the objects to filter:cells
    Name the output objects:megs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.4
    Filter using a maximum measurement value?:Yes
    Maximum value:1.0

FilterObjects:[module_num:16|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notes:['Filter spread MKs (large round objects > 0.4 FF), and small objects w/ perim. < 100 px.']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
    Select the objects to filter:pplt
    Name the output objects:proplatelets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.4

DisplayDataOnImage:[module_num:17|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:megs
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:c_outlines
    Text color:red
    Name the output image that has the measurements displayed:cell_outlines
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):30
    Display mode:Text
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    Display background image?:Yes
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
MeasureImageAreaOccupied:[module_num:18|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:megs
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:proplatelets
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
MeasureObjectSizeShape:[module_num:19|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
    Select objects to measure:megs
    Select objects to measure:proplatelets
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:20|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
    Hidden:1
    Select an image to measure:protrusion_thresh
    Select objects to measure:proplatelets

DisplayDensityPlot:[module_num:21|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enabled:False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
    Select the object to display on the X-axis:proplatelets
    Select the object measurement to plot on the X-axis:AreaShape_Area
    Select the object to display on the Y-axis:proplatelets
    Select the object measurement to plot on the Y-axis:AreaShape_Area
    Select the grid size:100
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    How should the colorbar be scaled?:linear
    Select the color map:jet
    Enter a title for the plot, if desired:test

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:phase
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:megs
    Select outline color:Green
    Select objects to display:proplatelets

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:Yes
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    Name the output image:c_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:megs

DisplayDataOnImage:[module_num:25|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:megs
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:c_outlines
    Text color:red
    Name the output image that has the measurements displayed:cell_outlines
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):30
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:c_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:Yes
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    Name the output image:p_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:proplatelets

DisplayDataOnImage:[module_num:28|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:proplatelets
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:p_outlines
    Text color:red
    Name the output image that has the measurements displayed:proplatelet_outlines
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):20
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:p_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_proplatelet_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:30|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
    Select the input objects:proplatelets
    Name the output image:PPLTObj
    Select the color format:uint16
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
SaveImages:[module_num:31|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
    Select the type of image to save:Image
    Select the image to save:PPLTObj
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|labels
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:32|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|csv
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:results_
    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:33|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:results_cells_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:results_cells.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:cells
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:c_outlines,cell,p_outlines,phase,protrusion
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:results_cells_
    Which objects should be used for locations?:cells
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToDatabase:[module_num:34|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:results_pplt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:results_pplt.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:pplt
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:c_outlines,cell,p_outlines,phase
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:results_pplt_
    Which objects should be used for locations?:pplt
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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