CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:29
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>.*)_.+_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\\\\\\\(?P<fldr>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'ppltobj': None}, {u'ppltobj': None}, {u'ppltobj': None}]
    Image set matching method:Metadata
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (extension does istif)
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    Name to assign these objects:ppltobj
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ExpandOrShrinkObjects:[module_num:5|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
    Select the input objects:ppltobj
    Name the output objects:skel
    Select the operation:Skeletonize each object
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
ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:ppltobj
    Name the output objects:prot_seed
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:7|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
    Select the input objects:skel
    Name the output image:ppltimg
    Select the color format:Binary (black & white)
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
MeasureObjectSkeleton:[module_num:8|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
    Select the seed objects:prot_seed
    Select the skeletonized image:ppltimg
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

OverlayObjects:[module_num:9|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
    Input:None
    Name the output image:OverlayObjects
    Objects:Do not use
    Opacity:0.3

MorphologicalSkeleton:[module_num:10|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
    Select the input image:RemoveHoles
    Name the output image:MorphologicalSkeleton

ConvertImageToObjects:[module_num:11|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
    Select the input image:MorphologicalSkeleton
    Name the output object:skeleton

ImageMath:[module_num:12|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notes:['Use cell + cell_boundary as seeds']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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:im_seeds
    Image or measurement?:Image
    Select the first image:cell
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:cell_boundary
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:protrusion
    Multiply the third image by:-1.0
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    Image or measurement?:Image
    Select the fourth image:background
    Multiply the fourth image by:-1.0
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
ConvertImageToObjects:[module_num:13|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
    Select the input image:im_seeds
    Name the output object:seeds_obj

IdentifySecondaryObjects:[module_num:14|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
    Select the input objects:seeds_obj
    Name the objects to be identified:seeds
    Select the method to identify the secondary objects:Propagation
    Select the input image:im_seeds
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:No
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSkeleton:[module_num:15|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
    Select the seed objects:seeds
    Select the skeletonized image:MorphologicalSkeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:No
    Maximum hole size:10
    Export the skeleton graph relationships?:Yes
    Intensity image:MorphologicalSkeleton
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:Dilation
    Name the primary objects to be identified:pplt
    Typical diameter of objects, in pixel units (Min,Max):15,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_skeleton_thresh
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
MeasureObjectSizeShape:[module_num:17|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
    Select objects to measure:pplt
    Select objects to measure:skeleton
    Calculate the Zernike features?:Yes

FilterObjects:[module_num:18|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notes:['Filter spread MKs (large round objects > 0.4 FF), and small objects w/ perim. < 100 px.']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
    Select the objects to filter:pplt
    Name the output objects:proplatelets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Solidity
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1

DisplayDataOnImage:[module_num:19|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enabled:False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
    Display object or image measurements?:Object
    Select the input objects:megs
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:c_outlines
    Text color:red
    Name the output image that has the measurements displayed:cell_outlines
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):30
    Display mode:Text
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    Display background image?:Yes
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
MeasureImageAreaOccupied:[module_num:20|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:proplatelets
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:skeleton
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
MeasureObjectSizeShape:[module_num:21|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
    Select objects to measure:proplatelets
    Select objects to measure:skeleton
    Calculate the Zernike features?:Yes

MeasureObjectIntensity:[module_num:22|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
    Hidden:1
    Select an image to measure:protrusion
    Select objects to measure:proplatelets

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:Yes
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    Name the output image:p_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:proplatelets

DisplayDataOnImage:[module_num:24|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
    Display object or image measurements?:Object
    Select the input objects:skeleton
    Measurement to display:AreaShape_Solidity
    Select the image on which to display the measurements:p_outlines
    Text color:red
    Name the output image that has the measurements displayed:proplatelet_outlines
    Font size (points):15
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):20
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:BranchpointImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_branchpoints
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:cell_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:proplatelet_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_proplatelet_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:28|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:results_
    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:29|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:results_pplt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:results_pplt.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:pplt
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:c_outlines,p_outlines,phase
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:results_pplt_
    Which objects should be used for locations?:pplt
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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