CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>.*)_.+_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\\\\\\\(?P<fldr>.*)$
    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>.*)_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)_.*_(?P<ilastik>[0-9]+)\\\\.
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'protrusion': u'Well', u'cell_boundary': u'Well', u'cell': u'Well', u'ppltobj': u'Well', u'background': u'Well', u'phase': u'Well'}, {u'protrusion': u'Site', u'cell_boundary': u'Site', u'cell': u'Site', u'ppltobj': u'Site', u'background': u'Site', u'phase': u'Site'}, {u'protrusion': u'time', u'cell_boundary': u'time', u'cell': u'time', u'ppltobj': u'time', u'background': u'time', u'phase': u'time'}]
    Image set matching method:Metadata
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does fldr "labels")
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    Name to assign these objects:ppltobj
    Select the image type:Objects
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    Select the rule criteria:and (metadata does fldr "single_images")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ilastik "1")
    Name to assign these images:protrusion
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ilastik "0")
    Name to assign these images:background
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ilastik "2")
    Name to assign these images:cell_boundary
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ilastik "3")
    Name to assign these images:cell
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Dilation:[module_num:5|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
    Select the input image:protrusion
    Name the output image:dilated_protrusion
    Structuring element:disk,1

ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:im_protrusion
    Image or measurement?:Image
    Select the first image:dilated_protrusion
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:background
    Multiply the second image by:-1.0
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
EnhanceOrSuppressFeatures:[module_num:7|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
    Select the input image:im_protrusion
    Name the output image:enhanced_protrusion
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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
Threshold:[module_num:8|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
    Select the input image:enhanced_protrusion
    Name the output image:protrusion_thresh
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.00,1.0
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
MorphologicalSkeleton:[module_num:9|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
    Select the input image:protrusion_thresh
    Name the output image:MorphologicalSkeleton

IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:MorphologicalSkeleton
    Name the primary objects to be identified:protrusions
    Typical diameter of objects, in pixel units (Min,Max):1,40
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.0
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    Manual threshold:0.01
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
MaskObjects:[module_num:11|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
    Select objects to be masked:protrusions
    Name the masked objects:MaskedProtrusion
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ppltobj
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

ExpandOrShrinkObjects:[module_num:12|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
    Select the input objects:MaskedProtrusion
    Name the output objects:protrusion_seed
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:Yes

ConvertObjectsToImage:[module_num:13|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
    Select the input objects:MaskedProtrusion
    Name the output image:MaskedProtrusionImage
    Select the color format:Binary (black & white)
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
MeasureObjectSkeleton:[module_num:14|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
    Select the seed objects:protrusion_seed
    Select the skeletonized image:MaskedProtrusionImage
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:Yes
    Intensity image:protrusion
    File output directory:Default Output Folder|skeleton
    Vertex file name:vertices.csv
    Edge file name:edges.csv

RelateObjects:[module_num:15|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
    Parent objects:ppltobj
    Child objects:MaskedProtrusion
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
DisplayDataOnImage:[module_num:16|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
    Display object or image measurements?:Object
    Select the input objects:protrusion_seed
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:BranchpointImage
    Text color:red
    Name the output image that has the measurements displayed:DisplayImage
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:BranchpointImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_branchpoints
    Saved file format:png
    Output file location:Default Output Folder sub-folder|skeleton
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayObjects:[module_num:18|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
    Input:phase
    Name the output image:OverlayObjects
    Objects:MaskedProtrusion
    Opacity:0.6

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:OverlayObjects
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|skeleton_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SplitOrMergeObjects:[module_num:20|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enabled:False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
    Select the input objects:MaskedProtrusions
    Name the new objects:MergedProtrusions
    Operation:Merge
    Maximum distance within which to merge objects:10
    Merge using a grayscale image?:No
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    Merging method:Distance
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
ExportToSpreadsheet:[module_num:21|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:ppltobj|Location_Center_Y,ppltobj|Location_Center_X,ppltobj|Mean_MaskedProtrusion_Location_Center_Y,ppltobj|Mean_MaskedProtrusion_Location_Center_X,ppltobj|Mean_MaskedProtrusion_Number_Object_Number,ppltobj|Number_Object_Number,ppltobj|Children_MaskedProtrusion_Count,protrusion_seed|Location_Center_Y,protrusion_seed|Location_Center_X,protrusion_seed|Number_Object_Number,protrusion_seed|ObjectSkeleton_TotalObjectSkeletonLength_MaskedProtrusionImage,protrusion_seed|ObjectSkeleton_NumberNonTrunkBranches_MaskedProtrusionImage,protrusion_seed|ObjectSkeleton_NumberTrunks_MaskedProtrusionImage,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:results_
    Overwrite existing files without warning?:Yes
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
ExportToDatabase:[module_num:22|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:results_pplt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:results_pplt.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:Select...
    Select the objects:protrusions
    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:MorphologicalSkeleton,protrusion
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:results_pplt_
    Which objects should be used for locations?:protrusions
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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