CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>.*)_.+_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\\\\\\\(?P<fldr>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'phase': u'Well', u'ppltobj': u'Well', u'rfp': u'Well', u'mkobj': u'Well'}, {u'phase': u'Site', u'ppltobj': u'Site', u'rfp': u'Site', u'mkobj': u'Site'}, {u'phase': u'time', u'ppltobj': u'time', u'rfp': u'time', u'mkobj': u'time'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does fldr "single_images")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does fldr "rfp_single")
    Name to assign these images:rfp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does fldr "mk_labels")
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    Name to assign these objects:mkobj
    Select the image type:Objects
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    Select the rule criteria:and (metadata does fldr "proplatelet_labels")
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    Name to assign these objects:ppltobj
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:rfp
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:5
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:rfp
    Name the output image:CorrectedRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:CorrectedRed
    Name the primary objects to be identified:rfp_obj
    Typical diameter of objects, in pixel units (Min,Max):2,1000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MaskObjects:[module_num:8|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
    Select objects to be masked:rfp_obj
    Name the masked objects:MaskedRedmk
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:mkobj
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:9|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
    Select objects to be masked:rfp_obj
    Name the masked objects:MaskedRedpplt
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ppltobj
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:rfp
    Select objects to measure:MaskedRedpplt
    Select objects to measure:MaskedRedmk

MeasureObjectSizeShape:[module_num:11|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
    Select objects to measure:MaskedRedpplt
    Select objects to measure:MaskedRedmk
    Calculate the Zernike features?:Yes

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:phase
    Name the output image:rfp_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:MaskedRedmk
    Select outline color:green
    Select objects to display:MaskedRedpplt

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:rfp_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_rfp
    Saved file format:png
    Output file location:Default Output Folder sub-folder|fluo_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:14|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:MaskedRedpplt|Parent_rfp_obj,MaskedRedpplt|Number_Object_Number,MaskedRedpplt|Intensity_MassDisplacement_rfp,MaskedRedpplt|Intensity_MinIntensity_rfp,MaskedRedpplt|Intensity_StdIntensity_rfp,MaskedRedpplt|Intensity_UpperQuartileIntensity_rfp,MaskedRedpplt|Intensity_MinIntensityEdge_rfp,MaskedRedpplt|Intensity_MADIntensity_rfp,MaskedRedpplt|Intensity_LowerQuartileIntensity_rfp,MaskedRedpplt|Intensity_MeanIntensityEdge_rfp,MaskedRedpplt|Intensity_IntegratedIntensityEdge_rfp,MaskedRedpplt|Intensity_MaxIntensity_rfp,MaskedRedpplt|Intensity_MedianIntensity_rfp,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:results_
    Overwrite existing files without warning?:Yes
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