CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:318
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Date>[0-9]{6,8})_(?P<Experiment>.*)_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<Time>[0-9]+)\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*[\\/](?P<Folder>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'phase': u'Well', u'mk_obj': u'Well', u'pplt_obj': u'Well', u'fluo': u'Well'}, {u'phase': u'Site', u'mk_obj': u'Site', u'pplt_obj': u'Site', u'fluo': u'Site'}, {u'phase': u'Time', u'mk_obj': u'Time', u'pplt_obj': u'Time', u'fluo': u'Time'}]
    Image set matching method:Metadata
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Folder "single_images")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Folder "single_fluo")
    Name to assign these images:fluo
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Folder "mk_labels")
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    Name to assign these objects:mk_obj
    Select the image type:Objects
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    Select the rule criteria:and (metadata does Folder "pplt_labels")
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    Name to assign these objects:pplt_obj
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['']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
    Select the input image:fluo
    Name the output image:fluo_illum
    Select how the illumination function is calculated:Background
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    Block size:10
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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notes:['Background -> Subtract', 'Regular -> Divide']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
    Select the input image:fluo
    Name the output image:fluo_correct
    Select the illumination function:fluo_illum
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:fluo_correct
    Name the primary objects to be identified:fluo_obj
    Typical diameter of objects, in pixel units (Min,Max):1,1000
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskObjects:[module_num:8|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
    Select objects to be masked:fluo_obj
    Name the masked objects:mk_fluo
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:mk_obj
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:9|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
    Select objects to be masked:fluo_obj
    Name the masked objects:pplt_fluo
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:pplt_obj
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:10|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
    Hidden:1
    Select an image to measure:fluo
    Select objects to measure:mk_fluo
    Select objects to measure:pplt_fluo

MeasureObjectIntensityDistribution:[module_num:11|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notes:["This module will fail if it's unable to detect puncta/signal. ie: bubbles in well, non-unfirom "]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enabled:False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
    Hidden:1
    Hidden:2
    Hidden:1
    Hidden:2
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select an image to measure:fluo
    Select objects to measure:mkobj
    Object to use as center?:Centers of other objects
    Select objects to use as centers:mk_fluo
    Select objects to measure:ppltobj
    Object to use as center?:Centers of other objects
    Select objects to use as centers:MaskedFluoPPLT
    Scale the bins?:No
    Number of bins:4
    Maximum radius:35
    Image:None
    Objects to display:mkobj
    Number of bins:4
    Measurement:Mean Fraction
    Color map:gist_heat
    Save display as image?:Yes
    Output image name:MK_Heatmap
    Image:None
    Objects to display:ppltobj
    Number of bins:4
    Measurement:Mean Fraction
    Color map:hot
    Save display as image?:Yes
    Output image name:PPLT_Heatmap

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:mk_fluo
    Select objects to measure:pplt_fluo
    Calculate the Zernike features?:Yes

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:fluo_correct
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_corrected
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:MK_Heatmap
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_mkh
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:PPLT_Heatmap
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_pplth
    Saved file format:png
    Output file location:Default Output Folder sub-folder|overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:16|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:Yes
    Select source of sample row name:Image filename
    Select the image to use as the identifier:phase
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:results_
    Overwrite existing files without warning?:Yes
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