CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:36
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>.*)_.+_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\\\\\\\(?P<fldr>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'phase': u'Well', u'ppltobj': u'Well', u'gfp': u'Well', u'rfp': u'Well', u'mkobj': u'Well'}, {u'phase': u'Site', u'ppltobj': u'Site', u'gfp': u'Site', u'rfp': u'Site', u'mkobj': u'Site'}, {u'phase': u'time', u'ppltobj': u'time', u'gfp': u'time', u'rfp': u'time', u'mkobj': u'time'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does fldr "single_images")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does fldr "gfp_single")
    Name to assign these images:gfp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does fldr "rfp_single")
    Name to assign these images:rfp
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does fldr "mk_labels")
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    Name to assign these objects:mkobj
    Select the image type:Objects
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    Select the rule criteria:and (metadata does fldr "proplatelet_labels")
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    Name to assign these objects:ppltobj
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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notes:['Perform illumination correction using the Regular method and polynomial fitting to create a illumination correction function for the second image. ']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
    Select the input image:rfp
    Name the output image:IllumRed
    Select how the illumination function is calculated:Background
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    Block size:5
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:gfp
    Name the output image:IllumGreen
    Select how the illumination function is calculated:Background
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    Block size:5
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:All: First cycle
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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notes:['Apply the illumination function to the original images and examine the result.']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
    Select the input image:rfp
    Name the output image:CorrectedRed
    Select the illumination function:IllumRed
    Select how the illumination function is applied:Subtract
    Select the input image:gfp
    Name the output image:CorrectedGreen
    Select the illumination function:IllumGreen
    Select how the illumination function is applied:Subtract

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrectedRed
    Name the primary objects to be identified:NucLight
    Typical diameter of objects, in pixel units (Min,Max):2,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:CorrectedGreen
    Name the primary objects to be identified:LifeAct
    Typical diameter of objects, in pixel units (Min,Max):2,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Two classes
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
MaskObjects:[module_num:10|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
    Select objects to be masked:NucLight
    Name the masked objects:MaskedRedmk
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:mkobj
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:11|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
    Select objects to be masked:NucLight
    Name the masked objects:MaskedRedpplt
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ppltobj
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:12|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
    Select objects to be masked:LifeAct
    Name the masked objects:MaskedGreenmk
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:mkobj
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MaskObjects:[module_num:13|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
    Select objects to be masked:LifeAct
    Name the masked objects:MaskedGreenpplt
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:ppltobj
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    Handling of objects that are partially masked:Keep
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:14|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
    Hidden:2
    Select an image to measure:rfp
    Select an image to measure:gfp
    Select objects to measure:MaskedRedmk
    Select objects to measure:MaskedRedpplt
    Select objects to measure:MaskedGreenmk
    Select objects to measure:MaskedGreenpplt

DisplayHistogram:[module_num:15|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enabled:False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
    Select the object whose measurements will be displayed:MaskedGreenpplt
    Select the object measurement to plot:Intensity_IntegratedIntensity_gfp
    Number of bins:75
    Transform the data prior to plotting along the X-axis?:log
    How should the Y-axis be scaled?:linear
    Enter a title for the plot, if desired:test
    Specify min/max bounds for the X-axis?:No
    Minimum/maximum values for the X-axis:0.0,1.0

DisplayDensityPlot:[module_num:16|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enabled:False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
    Select the object to display on the X-axis:MaskedRedmk
    Select the object measurement to plot on the X-axis:Intensity_IntegratedIntensity_rfp
    Select the object to display on the Y-axis:MaskedRedpplt
    Select the object measurement to plot on the Y-axis:Intensity_IntegratedIntensity_rfp
    Select the grid size:75
    How should the X-axis be scaled?:linear
    How should the Y-axis be scaled?:linear
    How should the colorbar be scaled?:linear
    Select the color map:jet
    Enter a title for the plot, if desired:test2

DisplayDataOnImage:[module_num:17|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
    Display object or image measurements?:Object
    Select the input objects:MaskedRedmk
    Measurement to display:Intensity_IntegratedIntensity_rfp
    Select the image on which to display the measurements:phase
    Text color:green
    Name the output image that has the measurements displayed:DisplayRedMK
    Font size (points):10
    Number of decimals:1
    Image elements to save:Image
    Annotation offset (in pixels):22
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DisplayRedMK
    Name the output image:NucLight_MK_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:MaskedRedmk

DisplayDataOnImage:[module_num:19|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
    Display object or image measurements?:Object
    Select the input objects:MaskedRedpplt
    Measurement to display:Intensity_IntegratedIntensity_rfp
    Select the image on which to display the measurements:phase
    Text color:green
    Name the output image that has the measurements displayed:DisplayRedPPLT
    Font size (points):10
    Number of decimals:1
    Image elements to save:Image
    Annotation offset (in pixels):22
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DisplayRedPPLT
    Name the output image:NucLight_PPLT_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:red
    Select objects to display:MaskedRedpplt

DisplayDataOnImage:[module_num:21|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
    Display object or image measurements?:Object
    Select the input objects:MaskedGreenmk
    Measurement to display:Intensity_IntegratedIntensity_gfp
    Select the image on which to display the measurements:phase
    Text color:red
    Name the output image that has the measurements displayed:DisplayGreenMK
    Font size (points):10
    Number of decimals:1
    Image elements to save:Image
    Annotation offset (in pixels):24
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DisplayGreenMK
    Name the output image:LifeAct_MK_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:MaskedGreenmk

DisplayDataOnImage:[module_num:23|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
    Display object or image measurements?:Object
    Select the input objects:MaskedGreenpplt
    Measurement to display:Intensity_IntegratedIntensity_gfp
    Select the image on which to display the measurements:phase
    Text color:red
    Name the output image that has the measurements displayed:DisplayGreenPPLT
    Font size (points):10
    Number of decimals:1
    Image elements to save:Image
    Annotation offset (in pixels):24
    Display mode:Text
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    Display background image?:Yes
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
OverlayOutlines:[module_num:24|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DisplayGreenPPLT
    Name the output image:LifeAct_PPLT_overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:green
    Select objects to display:MaskedGreenpplt

RelateObjects:[module_num:25|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enabled:False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
    Parent objects:mkobj
    Child objects:MaskedRedmk
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:Yes
    Parent name:None

RelateObjects:[module_num:26|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enabled:False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
    Parent objects:ppltobj
    Child objects:MaskedRedpplt
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:27|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enabled:False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
    Parent objects:mkobj
    Child objects:MaskedGreenmk
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
RelateObjects:[module_num:28|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enabled:False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
    Parent objects:ppltobj
    Child objects:MaskedGreenpplt
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
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
ClassifyObjects:[module_num:29|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enabled:False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
    Make each classification decision on how many measurements?:Pair of measurements
    Hidden:1
    Select the object to be classified:mkobj
    Select the measurement to classify by:Mean_MaskedRedmk
    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object name:mkobj
    Select the first measurement:Mean_MaskedRedmk_Distance_Centroid_mkobj
    Method to select the cutoff:Custom
    Enter the cutoff value:0
    Select the second measurement:Mean_MaskedGreenmk_Distance_Centroid_mkobj
    Method to select the cutoff:Custom
    Enter the cutoff value:0
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:Yes
    Enter the image name:MK

ClassifyObjects:[module_num:30|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enabled:False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
    Make each classification decision on how many measurements?:Pair of measurements
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object name:ppltobj
    Select the first measurement:Mean_MaskedRedpplt_Distance_Centroid_ppltobj
    Method to select the cutoff:Custom
    Enter the cutoff value:0
    Select the second measurement:Mean_MaskedGreenpplt_Distance_Centroid_ppltobj
    Method to select the cutoff:Custom
    Enter the cutoff value:0
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:Yes
    Enter the image name:PPLT

ClassifyObjects:[module_num:31|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enabled:False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
    Make each classification decision on how many measurements?:Pair of measurements
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object name:LifeAct
    Select the first measurement:Intensity_MaxIntensity_gfp
    Method to select the cutoff:Custom
    Enter the cutoff value:0.5
    Select the second measurement:Children_MaskedGreenmk_Count
    Method to select the cutoff:Custom
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:Yes
    Enter the image name:MK

ClassifyObjects:[module_num:32|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enabled:False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
    Make each classification decision on how many measurements?:Pair of measurements
    Hidden:1
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    Select bin spacing:Evenly spaced bins
    Number of bins:3
    Lower threshold:0.0
    Use a bin for objects below the threshold?:No
    Upper threshold:1.0
    Use a bin for objects above the threshold?:No
    Enter the custom thresholds separating the values between bins:0,1
    Give each bin a name?:No
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    Retain an image of the classified objects?:No
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    Select the object name:LifeAct
    Select the first measurement:Intensity_MaxIntensity_gfp
    Method to select the cutoff:Custom
    Enter the cutoff value:0.5
    Select the second measurement:Children_MaskedGreenpplt_Count
    Method to select the cutoff:Custom
    Enter the cutoff value:0.5
    Use custom names for the bins?:No
    Enter the low-low bin name:low_low
    Enter the low-high bin name:low_high
    Enter the high-low bin name:high_low
    Enter the high-high bin name:high_high
    Retain an image of the classified objects?:Yes
    Enter the image name:MK

CalculateMath:[module_num:33|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enabled:False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
    Name the output measurement:Measurement
    Operation:Multiply
    Select the first operand measurement type:Image
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    Select the first operand measurement:Count
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
SaveImages:[module_num:34|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:Fluo_overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_fluo_overlay
    Saved file format:png
    Output file location:Default Output Folder sub-folder|fluo_overlay
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:35|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:results_
    Overwrite existing files without warning?:No
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
CalculateMath:[module_num:36|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enabled:False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
    Name the output measurement:PercentPositive
    Operation:Multiply
    Select the first operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the second operand measurement type:Image
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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