CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:4
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>.*)_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)_.*_(?P<ilastik>[0-9]+)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>.*)_.+_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\\\\\\\(?P<fldr>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'cell': u'Well', u'phase': u'Well', u'protrusion': u'Well'}, {u'cell': u'Site', u'phase': u'Site', u'protrusion': u'Site'}, {u'cell': u'time', u'phase': u'time', u'protrusion': u'time'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ilastik "1")
    Name to assign these images:cell
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ilastik "0")
    Name to assign these images:protrusion
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does fldr "single_images")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Threshold:[module_num:5|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
    Select the input image:cell
    Name the output image:cell_thresh
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.5
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
Threshold:[module_num:6|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
    Select the input image:protrusion
    Name the output image:p_thresh
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:0.0
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:cell_thresh
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_cell_thresh
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:p_thresh
    Name the primary objects to be identified:protrusion
    Typical diameter of objects, in pixel units (Min,Max):15,500
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Measurement
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Select the measurement to threshold with:Threshold_FinalThreshold_p_thresh
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
MeasureObjectSizeShape:[module_num:9|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
    Select objects to measure:cells
    Select objects to measure:protrusion
    Calculate the Zernike features?:Yes

ExpandOrShrinkObjects:[module_num:10|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
    Select the input objects:protrusion
    Name the output objects:ShrunkenProtrusion
    Select the operation:Skeletonize each object
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
ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:protrusion
    Name the output objects:protrusion_seeds
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No

ConvertObjectsToImage:[module_num:12|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
    Select the input objects:ShrunkenProtrusion
    Name the output image:protrusion_skeleton
    Select the color format:Binary (black & white)
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
MeasureObjectSkeleton:[module_num:13|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
    Select the seed objects:protrusion_seeds
    Select the skeletonized image:protrusion_skeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:BranchpointImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_branchpoints
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureImageAreaOccupied:[module_num:15|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:cells
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:protrusion
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
MeasureObjectIntensity:[module_num:16|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
    Hidden:1
    Select an image to measure:cell
    Select objects to measure:protrusion

FilterObjects:[module_num:17|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
    Select the objects to filter:protrusion
    Name the output objects:FilterProtrusion
    Select the filtering mode:Rules
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    Select the location of the rules or classifier file:Default Input Folder|
    Rules or classifier file name:fast_gentle_boosting_rules.txt
    Class number:1
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    Additional object count:0
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:phase
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:cells
    Select outline color:Green
    Select objects to display:FilterProtrusion

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:Yes
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    Name the output image:cell_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:cells

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:cell_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cell_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:Yes
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    Name the output image:protrusion_outlines
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:white
    Select objects to display:FilterProtrusion

SaveImages:[module_num:23|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
    Select the type of image to save:Image
    Select the image to save:protrusion_outlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_protrusion_outlines
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:qinmc_
    Overwrite existing files without warning?:Yes
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