CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160302210837
GitHash:1b13225
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from image file headers
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    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:8
    Single images count:0
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    Select the rule criteria:and (file does contain "t1.tif")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sub") (metadata does Frame "0")
    Name to assign these images:edge_white
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sub") (metadata does Frame "1")
    Name to assign these images:edge_black
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sub") (metadata does Frame "2")
    Name to assign these images:background
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sub") (metadata does Frame "3")
    Name to assign these images:oof
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sub") (metadata does Frame "4")
    Name to assign these images:center_white
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sub") (metadata does Frame "5")
    Name to assign these images:center_black
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Sub") (metadata does Frame "6")
    Name to assign these images:bgb
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:center_black
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:center_white
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:background
    Multiply the third image by:-1.0
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    Image or measurement?:Image
    Select the fourth image:oof
    Multiply the fourth image by:-1.0
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    Image or measurement?:Image
    Select the fifth image:bgb
    Multiply the fifth image by:-1.0
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
ImageMath:[module_num:6|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enabled:False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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:center_black
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:center_white
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:background
    Multiply the third image by:-1.0
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    Image or measurement?:Image
    Select the fourth image:oof
    Multiply the fourth image by:-1.0
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    Image or measurement?:Image
    Select the fifth image:bgb
    Multiply the fifth image by:-1.0
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    Image or measurement?:Image
    Select the sixth image:edge_black
    Multiply the sixth image by:-1.0
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    Image or measurement?:Image
    Select the seventh image:edge_white
    Multiply the seventh image by:-1.0
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
Morph:[module_num:7|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
    Select the input image:ImageAfterMath
    Name the output image:prob_smooth
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Diameter:10
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:prob_smooth
    Name the primary objects to be identified:cell_centers
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
OverlayOutlines:[module_num:9|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:phase
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:cell_centers

SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:phase
    Select objects to measure:cell_centers

MeasureObjectSizeShape:[module_num:12|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
    Select objects to measure:cell_centers
    Calculate the Zernike features?:Yes

MeasureTexture:[module_num:13|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
    Hidden:1
    Hidden:1
    Hidden:2
    Select an image to measure:phase
    Select objects to measure:cell_centers
    Texture scale to measure:3
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Texture scale to measure:9
    Angles to measure:Horizontal,Vertical,Diagonal,Anti-diagonal
    Measure Gabor features?:Yes
    Number of angles to compute for Gabor:4
    Measure images or objects?:Both

ExportToDatabase:[module_num:14|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:phase_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:phase.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:OrigOverlay,phase
    Auto-scale thumbnail pixel intensities?:Yes
    Select the plate type:None
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    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:phase
    Which objects should be used for locations?:cell_centers
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Data and schema
    Access CPA images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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