CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<experiment>.*)_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)_.*_(?P<ilastik>[0-9]+)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<experiment>.*)_.+_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)\\\\.
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'phase': u'Well', u'cell': u'Well', u'protrusion': u'Well'}, {u'cell': u'Site', u'phase': u'Site', u'protrusion': u'Site'}, {u'cell': u'time', u'phase': u'time', u'protrusion': u'time'}]
    Image set matching method:Metadata
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (metadata does ilastik "2")
    Name to assign these images:cell
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ilastik "3")
    Name to assign these images:protrusion
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does experiment "161212")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ApplyThreshold:[module_num:5|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notes:['cell refers to megakarycytes or the round objects in an image.']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
    Select the input image:cell
    Name the output image:cell_thresh
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.5
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
ApplyThreshold:[module_num:6|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notes:['protrusion refers to proplatelets, or the spindles and extensions and bubbly appearance of the proplatelets in an image.']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
    Select the input image:protrusion
    Name the output image:protrusion_thresh
    Select the output image type:Binary (black and white)
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.3
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
Morph:[module_num:7|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notes:['The protrusion pixels are sometimes spotty, which will complicate segmentation. Therefore small holes in the thresholded area over a proplatelet will be fillled by the "close" operation.']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
    Select the input image:protrusion_thresh
    Name the output image:protrusion_morph
    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Diameter:8
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:8|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notes:['Segment megakaryocytes']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
    Select the input image:cell_thresh
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):10,60
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Segement proplatelets']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
    Select the input image:protrusion_morph
    Name the primary objects to be identified:protrusion
    Typical diameter of objects, in pixel units (Min,Max):15,500
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:cells
    Select objects to measure:protrusion
    Calculate the Zernike features?:Yes

ExpandOrShrinkObjects:[module_num:11|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
    Select the input objects:protrusion
    Name the output objects:ShrunkenProtusion
    Select the operation:Skeletonize each object
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    Retain the outlines of the identified objects?:No
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
ExpandOrShrinkObjects:[module_num:12|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
    Select the input objects:protrusion
    Name the output objects:protrusion_seeds
    Select the operation:Shrink objects to a point
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    Fill holes in objects so that all objects shrink to a single point?:No
    Retain the outlines of the identified objects?:No
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
ConvertObjectsToImage:[module_num:13|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
    Select the input objects:ShrunkenProtusion
    Name the output image:protrusion_skeleton
    Select the color format:Binary (black & white)
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
MeasureNeurons:[module_num:14|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
    Select the seed objects:protrusion_seeds
    Select the skeletonized image:protrusion_skeleton
    Retain the branchpoint image?:Yes
    Name the branchpoint image:BranchpointImage
    Fill small holes?:Yes
    Maximum hole size:10
    Export the neuron graph relationships?:Yes
    Intensity image:protrusion
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:BranchpointImage
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    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_branchpoints
    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
OverlayOutlines:[module_num:16|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notes:['This is for visualizing segmentation']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:phase
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:cells
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:protrusion

SaveImages:[module_num:17|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notes:['Save the segmentation visuals']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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureImageAreaOccupied:[module_num:18|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
    Hidden:2
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:cells
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:protrusion
    Retain a binary image of the object regions?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:quantify_ilastik_
    Overwrite existing files without warning?:Yes
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