CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:22
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<experiment>.*)_.+_(?P<Well>[A-P][0-9]+)_(?P<Site>[0-9]+).*-(?P<time>[0-9]+)\\\\.
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\\\\\\\(?P<fldr>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does fldr "single_images")
    Name to assign these images:phase
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
EnhanceOrSuppressFeatures:[module_num:5|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notes:['This module will filter the image using a texture filter similar to the macro.']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
    Select the input image:phase
    Name the output image:EnhanceOrSuppressFeatures
    Select the operation:Enhance
    Feature size:10
    Feature type:Texture
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    Smoothing scale:2.0
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
Smooth:[module_num:6|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
    Select the input image:phase
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:0.5
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
Threshold:[module_num:7|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notes:['Texture is a "shortcut" to achieving a similar segmentation to the original macro. It\\'s advantage is that requires fewer steps.']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enabled:False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
    Select the input image:EnhanceOrSuppressFeatures
    Name the output image:ThresholdTexture
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
Threshold:[module_num:8|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
    Select the input image:FilteredImage
    Name the output image:ThresholdGuassian
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
ImageMath:[module_num:9|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:GuassianInverted
    Image or measurement?:Image
    Select the first image:ThresholdGuassian
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
Dilation:[module_num:10|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
    Select the input image:GuassianInverted
    Name the output image:Dilation
    Structuring element:disk,1

RemoveHoles:[module_num:11|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
    Select the input image:Dilation
    Name the output image:RemoveHoles
    Size:100

Erosion:[module_num:12|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
    Select the input image:RemoveHoles
    Name the output image:Erosion
    Structuring element:disk,1

IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:Erosion
    Name the primary objects to be identified:IdentifyPrimaryObjectsGaussian
    Typical diameter of objects, in pixel units (Min,Max):12,1000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
IdentifyPrimaryObjects:[module_num:14|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enabled:False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
    Select the input image:ThresholdTexture
    Name the primary objects to be identified:IdentifyPrimaryObjectsTexture
    Typical diameter of objects, in pixel units (Min,Max):12,1000000
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Manual
    Threshold smoothing scale:1.3488
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    Manual threshold:0.5
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
MeasureObjectSizeShape:[module_num:15|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
    Select objects to measure:IdentifyPrimaryObjectsGaussian
    Calculate the Zernike features?:No

FilterObjects:[module_num:16|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
    Select the objects to filter:IdentifyPrimaryObjectsGaussian
    Name the output objects:megs
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:Yes
    Minimum value:0.4
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:17|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
    Select the objects to filter:IdentifyPrimaryObjectsGaussian
    Name the output objects:proplatelets
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_FormFactor
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:0.4

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:phase
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:Red
    Select objects to display:megs
    Select outline color:Green
    Select objects to display:proplatelets

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_outlines
    Saved file format:png
    Output file location:Default Output Folder sub-folder|outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ConvertObjectsToImage:[module_num:20|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
    Select the input objects:IdentifyPrimaryObjectsGaussian
    Name the output image:object_image
    Select the color format:uint16
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:object_image
    Select method for constructing file names:From image filename
    Select image name for file prefix:phase
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_labels
    Saved file format:png
    Output file location:Default Output Folder sub-folder|label_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:22|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:macro_recreation_
    Overwrite existing files without warning?:No
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